CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RI")
    Name to assign these images:RefractiveIndex
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:CellsDetected
    Typical diameter of objects, in pixel units (Min,Max):22,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:.7
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.1,.15
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:CellsDetected
    Name the objects to be identified:CellMembrane
    Select the method to identify the secondary objects:Propagation
    Select the input image:RefractiveIndex
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    Regularization factor:0.01
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:CellMembrane
    Name the output image:RI_Mask
    Select the color format:Color
    Select the colormap:Paired_r

DisplayDataOnImage:[module_num:8|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
    Display object or image measurements?:Object
    Select the input objects:CellMembrane
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:RI_Mask
    Text color:black
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:CellMembrane, CellsDetected
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:DNA, RefractiveIndex
    Select objects to measure:CellMembrane, CellsDetected

ClassifyObjects:[module_num:11|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enabled:False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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:2
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:Netosis
    Name the output objects:Netosis cells
    Select a class:non-Netosis
    Name the output objects:Not Netosis
    Select the object name:CellMembrane
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Default Output Folder sub-folder|Library/CloudStorage/OneDrive-J.CRAIGVENTERINSTITUTE/Desktop/Nanolive images/C1vsC4/C1vsC4 cell profiler output
    Rules or classifier file name:my_model_netosismodel_C1vsC4run2_122125.model
    Allow fuzzy feature matching?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Library/CloudStorage/OneDrive-J.CRAIGVENTERINSTITUTE/Desktop/Nanolive images/C1vsC4/Run 3/Cellprofiler/C1vsC4_run3 CP output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_C1vsC4_run3
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:13|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:C1vsC4_run3
    Output file location:Default Output Folder sub-folder|Library/CloudStorage/OneDrive-J.CRAIGVENTERINSTITUTE/Desktop/Nanolive images/C1vsC4/Run 3/Cellprofiler/C1vsC4_run3 CP output
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:NETosisC1vsC4_run3_NETtest_SQL.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:C1vsC4_run3
    Which objects should be used for locations?:CellMembrane
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:C1vsC4_run3
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Object
    Enter the object name:CellsDetected
    Select the X-axis measurement:AreaShape_MaximumRadius
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Object
    Enter the object name:CellMembrane
    Select the Y-axis measurement:Intensity_IntegratedIntensity_DNA
    Select the Y-axis index:ImageNumber

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:RefractiveIndex
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Library/CloudStorage/OneDrive-J.CRAIGVENTERINSTITUTE/Desktop/Nanolive images/C1vsC4/Run 3/Cellprofiler/C1vsC4_run3 CP count images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
